PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expName, expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '', 'session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Smart Mom
  keyboardBackend = ioHub
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Routines
  Routine start
    TextComponent start_text_1
      languageStyle = RTL
      letterHeight = 0.035
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        בניסוי זה יוצגו בפניך מקבצי תמונות שונים.

        לאחר כל מקבץ תופיע שאלה שאת התשובה לגביה
        תתבקשי לדרג בסולם של 1-7 ולאחר מכן ללחוץ "דרגי".
    TextComponent start_text_2
      languageStyle = RTL
      letterHeight = 0.035
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0
      text = לחצי על מקש הרווח בשביל להתחיל.
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    SliderComponent example_slider
      color = White
      fillColor = 1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 1
      initVal = 4
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.05
      saveStartStop = False
      size = (1.0, 0.04)
      startVal [time (s)] = 0
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    KeyboardComponent key_space
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine images
    ImageComponent image
      saveStartStop = False
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    CodeComponent display_image
      Code Type = Auto->JS
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      Begin Routine:
        if currentBlock == 'stim_netural':
            blockPosition = stim_netural[give_images_loop.thisN+(neturalCounter*5)]
            image.image = blockPosition
            images_in_block.append(blockPosition)
        #   image_path.text = blockPosition
        #   stim_var.text = stim_netural

        elif currentBlock == 'stim_phone_on':
            blockPosition = stim_phone_on[give_images_loop.thisN+(phoneOnCounter*5)]
            image.image = blockPosition
            images_in_block.append(blockPosition)
        #   image_path.text = blockPosition
        #   stim_var.text = stim_phone_on

        elif currentBlock == 'stim_phone_off':
            blockPosition = stim_phone_off[give_images_loop.thisN+(phoneOffCounter*5)]
            image.image = blockPosition
            images_in_block.append(blockPosition)
        #   image_path.text = blockPosition
        #   stim_var.text = stim_phone_off
    TextComponent stim_var
      disabled = True
      letterHeight = 0.02
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent image_path
      disabled = True
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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  Routine finish
    TextComponent finish_text
      languageStyle = RTL
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = תודה רבה על ההשתתפות!
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    CodeComponent recording_finish
      Code Type = Auto->JS
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      Before Experiment:
        # Recording experiment start
        experimentStart = core.getTime()
      Begin Routine:
        import statistics

        # Recording experiment end and duration
        experimentEnd = core.getTime()
        experimentDuration = experimentEnd - experimentStart


        # Add experiment timestamps data
        thisExp.addData("experimentStart", experimentStart)
        thisExp.addData("experimentEnd", experimentEnd)
        thisExp.addData("experimentDuration", experimentDuration)


        # Add experiment order of blocks and images
        thisExp.addData("neturalImagesOrder", stim_netural)
        thisExp.addData("phoneOnOrder", stim_phone_on)
        thisExp.addData("phoneOffOrder", stim_phone_off)
        thisExp.addData("blocksOrder", blocks_order)


        # Calculate rating statistics
        thisExp.addData("ratingList", ratingList)

        ratingAverage = statistics.mean(ratingList)
        thisExp.addData("ratingAverage", ratingAverage)

        def getRange(numbers):
            return max(numbers) - min(numbers)
        listRange = getRange(ratingList)
        thisExp.addData("listRange", listRange)

        ratingStdev = statistics.stdev(ratingList)
        thisExp.addData("ratingStDev", ratingStdev)

        ratingMedian = statistics.median(ratingList)
        thisExp.addData("ratingMedian", ratingMedian)

        ratingVariance = statistics.variance(ratingList)
        thisExp.addData("ratingVariance", ratingVariance)


        # Create a new data line
        thisExp.nextEntry()
    KeyboardComponent key_finish
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rating
    TextComponent rating_text
      languageStyle = RTL
      letterHeight = 0.04
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = באיזו מידה את מרגישה צורך להשתמש בפלאפון שלך כעת?
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    TextComponent warning_text
      color = Red
      languageStyle = RTL
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [condition] = $warning
      text = אנא בחרי דירוג
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    SliderComponent rating_slider
      color = White
      fillColor = 1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.05
      saveStartStop = False
      size = (1.0, 0.04)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    ButtonComponent rating_button
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0, -0.3)
      save = none
      saveStartStop = False
      size = [0.2, 0.1]
      startVal [time (s)] = 0
      text = Rate
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      callback:
        if rating_slider.getRating() != None:
            continueRoutine = False
        else:
            warning = True
    CodeComponent marker_size
      Code Type = Auto->JS
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      Begin Routine:
        rating_slider.marker.size = [0.03, 0.03]
    CodeComponent show_warning
      Code Type = Auto->JS
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      Begin Routine:
        warning = False
    CodeComponent record_data
      Code Type = Auto->JS
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      Begin Routine:
        ratingStart = core.getTime()
      End Routine:
        # Get block category
        block_loop.addData('imageCategory', currentBlock)

        # Get rating timestamps
        ratingEnd = core.getTime()
        ratingDuration = ratingEnd - ratingStart
        block_loop.addData('ratingStart', ratingStart)
        block_loop.addData('ratingEnd', ratingEnd)
        block_loop.addData('ratingDuration', ratingDuration)

        # Save images block order
        thisExp.addData("imagesInBlock", images_in_block)

        # Save rating in list
        ratingList.append(rating_slider.getRating())
    CodeComponent counter
      Code Type = Auto->JS
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      End Routine:
        if currentBlock == 'stim_netural':
            neturalCounter+=1

        elif currentBlock == 'stim_phone_on':
            phoneOnCounter+=1

        elif currentBlock == 'stim_phone_off':
            phoneOffCounter+=1
    CodeComponent iMotions_end
      Code Type = Auto->JS
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      End Routine:
        blockType = blocks_order[block_loop.thisN]


        if currentBlock == 'stim_netural':
            pyautogui.press('1')
            print(111)

        elif currentBlock == 'stim_phone_on':
            pyautogui.press('2')
            print(222)

        elif currentBlock == 'stim_phone_off':
            pyautogui.press('3')
            print(333)
  Routine fixation
    TextComponent fixation_point
      letterHeight = 0.14
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine create_data
    CodeComponent data_creator
      Code Type = Auto->JS
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      Begin Routine:
        import random

        # Declare base variables
        numOfImages = range(30)
        numOfUniqueBlocks = 6
        numOfBlocks = numOfUniqueBlocks * 3
        ratingList = []

        # Declare arries
        stim_netural = []
        stim_phone_on = []
        stim_phone_off = []
        blocks_order = []

        # Declare loop counters
        neturalCounter = 0
        phoneOnCounter = 0
        phoneOffCounter = 0

        # Create the order of blocks (blocks_order)
        for stim in ['stim_netural', 'stim_phone_on', 'stim_phone_off']:
            blocks_order += [stim] * numOfUniqueBlocks

        random.shuffle(blocks_order)


        # Create the stim arraies
        for item in [stim_netural, stim_phone_on, stim_phone_off]:
            for num in numOfImages:
                if item == stim_netural:
                    item.append(f"images/Nophone_{num+1}.jpg")

                elif item == stim_phone_on:
                     item.append(f"images/Phone_on_{num+1}.jpg")

                elif item == stim_phone_off:
                     item.append(f"images/Phone_off_{num+1}.jpg")

            random.shuffle(item)
    CodeComponent iMotions_init
      Code Type = Auto->JS
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      Begin Experiment:
        import pyautogui
  Routine reset_data
    CodeComponent reset_variables
      Code Type = Auto->JS
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      Begin Routine:
        # Initiate current block variable
        currentBlock = blocks_order[block_loop.thisN]

        # Initiate the images order variable
        images_in_block = []
    CodeComponent iMotions_start
      Code Type = Auto->JS
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      Begin Routine:
        blockType = blocks_order[block_loop.thisN]


        if currentBlock == 'stim_netural':
            pyautogui.press('1')
            print(111)

        elif currentBlock == 'stim_phone_on':
            pyautogui.press('2')
            print(222)

        elif currentBlock == 'stim_phone_off':
            pyautogui.press('3')
            print(333)
Flow
  Routine start
  Routine create_data
  LoopInitiator block_loop loopType="TrialHandler"
    loopType = random
    nReps = numOfBlocks
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    Routine reset_data
    Routine fixation
    LoopInitiator give_images_loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 5
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      Routine images
    LoopTerminator give_images_loop
    Routine rating
  LoopTerminator block_loop
  Routine finish
